PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = goNogoTest
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Routines
  Routine trial
    PolygonComponent trialBlue
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent trialOrange
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instructions
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space for blue, nothing for orange. Space to start.
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    KeyboardComponent instr1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thanks
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = goNogoCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)])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
    Routine trial
  LoopTerminator trials
  Routine end
